PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = f"data/{subj}/{subj}_ses-{sess}_task-{expName}_run-{run}_{expInfo['date']}"
  Experiment info = {'subject': '0', 'session': '1', 'run': '1', 'category': 'None'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = rt_puzzle
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
  Routine instructions
    TextComponent instructions_text
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        Try to reveal as many puzzle pieces as you can!

        Demo instructions:
        Press "space" or "=" to mimic the first trigger pulse from the scanner to start the experiment. You hit "run" in the browswer window and then start the experiment here.
    KeyboardComponent instructions_keypress
      allowedKeys = 'space','equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_sounds
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.sound import Sound
        import pandas as pd
        from psychopy.tools import filetools
        puzzle_piece_sound = Sound('./sound_stimuli/puzzle_piece.wav')
        puzzle_complete_sound = Sound('./sound_stimuli/puzzle_complete.wav')

        fulltime = 540

        dlg = gui.Dlg(title = 'Experiment initialization')
        dlg.addField('subject')
        dlg.addField('session', choices=['1','2'])
        dlg.addField('run', choices=['1','2','3','4','5'])
        dlg.addField('category', choices=['forest','winter','beach','mountain','space','desert'])
        dlg.addField('outDirRoot',)

        user_input = dlg.show()

        subj = f'sub-RP{int(user_input[0]):03d}'
        sess = f'ses-{int(user_input[1])}'
        run = int(user_input[2])
        category = user_input[3]
        outDirRoot = user_input[4]

        if outDirRoot == '':
            outDirRoot = '../outDir'

        run_outDir = f'{outDirRoot}/{subj}/{sess}/run-{run}'
        print(f'looking in {run_outDir} for real time outputs')
        if not os.path.exists(run_outDir):
            os.makedirs(run_outDir)
      End Routine:
        runTimer = core.Clock()
        globalClock.reset()
        thisExp.timestampOnFlip(win, 'time0')
        thisExp.nextEntry()
  Routine puzzle
    ImageComponent puzzle_stimulus
      image [set every repeat] = $puzzle_img
      size = (1000,800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 570
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    PolygonComponent square_0
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-500,400)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_1
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-300,400)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_2
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-100,400)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_3
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (100,400)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_4
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (300,400)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_5
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-500,240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_6
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-300,240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_7
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-100,240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_8
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (100,240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_9
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (300,240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_10
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-500,80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_11
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-300,80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_12
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-100,80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_13
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (100,80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_14
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (300,80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_15
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-500,-80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_16
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-300,-80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_17
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-100,-80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_18
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (100,-80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_19
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (300,-80)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_20
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-500,-240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_21
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-300,-240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_22
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-100,-240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_23
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (100,-240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    PolygonComponent square_24
      anchor = top-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (300,-240)
      shape = rectangle
      size = (200, 160)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    KeyboardComponent neurofeedback
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
      store = all keys
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    CodeComponent puzzle_code
      Code Type = Auto->JS
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      Begin Experiment:
        total_pieces = 0
      Begin Routine:
        reveal_order = np.random.choice(list(range(25)),25,replace=False)
        n_pieces = None
        n_last_step = None
        print(f'this is the beginning of the routine and there are {n_pieces} pieces revealed')
        pieces_dict = {
               0:square_0,
               1:square_1,
               2:square_2,
               3:square_3,
               4:square_4,
               5:square_5,
               6:square_6,
               7:square_7,
               8:square_8,
               9:square_9,
               10:square_10,
               11:square_11,
               12:square_12,
               13:square_13,
               14:square_14,
               15:square_15,
               16:square_16,
               17:square_17,
               18:square_18,
               19:square_19,
               20:square_20,
               21:square_21,
               22:square_22,
               23:square_23,
               24:square_24}

        #determine what the last TR output was
        outputs = [i for i in os.listdir(run_outDir) if '.json' in i]
        outputs.sort()
        try:
            TR = int(outputs[-1].split('TR')[1].split('.')[0])
            print(f'TR0 for this puzzle is TR {TR}')
        except:
            TR = 0
      Each Frame:
        #play a sound if we revealed a piece on last flip
        if n_pieces != n_last_step and type(n_last_step) == int and n_last_step > 0:
            puzzle_piece_sound.play()
            core.wait(1.95)
            puzzle_piece_sound.stop()

        if n_pieces == 1 and n_last_step == 0:
            puzzle_piece_sound.play()
            core.wait(1.95)
            puzzle_piece_sound.stop()


        #creating variable to watch for changes
        if n_pieces == None:
            n_last_step = 0
        else:
            n_last_step = n_pieces

        #capture new responses
        next_TR = f'{run_outDir}/TR{TR+1:03d}.json'
        if os.path.exists(next_TR):
            #core.wait(.1)
            try:
                #feedback = pd.read_csv(next_TR)['feedback'][0]
                feedback = filetools.fromFile(next_TR)['feedback']
                if feedback == 'True':
                    if n_pieces == None:
                        n_pieces = 1
                    else:
                        n_pieces += 1
                TR += 1
            except:
                pass
        #n_pieces = len(neurofeedback.keys)
        #end routine if all pieces are revealed
        if n_pieces == 25:
            continueRoutine = False

        if bool(n_pieces) and n_pieces != n_last_step:
            pieces_dict[reveal_order[n_pieces-1]].opacity = 0.0
            thisExp.timestampOnFlip(win, 'feedback_given')
            thisExp.nextEntry()
            print(f'there are now {n_pieces} revealed')

        if runTimer.getTime() > fulltime:
            continueRoutine = False
            puzzle_loop.finished = True
      End Routine:
        for piece in pieces_dict:
            pieces_dict[piece].opacity = 1.0
        if n_pieces != None:
            total_pieces += n_pieces
    PolygonComponent image_border
      fillColor = None
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 2
      shape = rectangle
      size = (1000,800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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  Routine iti
    TextComponent iti_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Loading a new puzzle...
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    CodeComponent iti_code
      Code Type = Auto->JS
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      Each Frame:
        if runTimer.getTime() > fulltime:
            continueRoutine = False
            puzzle_loop.finished = True
  Routine full_puzzle
    ImageComponent completed_puzzle
      image [set every repeat] = $puzzle_img
      size = (1000,800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent image_border_2
      fillColor = None
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 2
      shape = rectangle
      size = (1000,800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent puzzle_complete_code
      Code Type = Auto->JS
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      Begin Routine:
        if runTimer.getTime() > fulltime:
            continueRoutine = False
            puzzle_loop.finished = True
        else:
            puzzle_complete_sound.play()
      End Routine:
        puzzle_complete_sound.stop()
  Routine end_screen
    TextComponent end_screen_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'Great job,\n\nYou got {total_pieces} puzzle pieces this time!\n\nTry to beat your high score next time.'
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    KeyboardComponent end_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator puzzle_loop loopType="TrialHandler"
    conditionsFile = $f'inputs/{category}_puzzle_list.csv'
    loopType = random
    nReps = 2
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    Routine iti
    Routine puzzle
    Routine full_puzzle
  LoopTerminator puzzle_loop
  Routine end_screen
