PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = f"data/{subj}/{subj}_{sess}_task-{expName}_run-{run}_{expInfo['date']}"
  Experiment info = {'subject': '0', 'session': '1', 'run': '1', 'category': 'None', 'outDirRoot': 'C:\\\\Users\\\\ah7700\\\\Desktop\\\\rt-press-tasks\\\\outDir'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = induction
  keyboardBackend = PsychToolbox
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = Try to score as many points as you can!
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    KeyboardComponent instructions_keypress
      allowedKeys = 'space','equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_vars
      Code Type = Py
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      Before Experiment:
        test_mode = False

        import pandas as pd
        from psychopy.tools import filetools
        import numpy as np
        from psychopy.constants import (NOT_STARTED, STARTED)
        #from psychopy.sound import Sound
        #puzzle_piece_sound = Sound('./sound_stimuli/puzzle_piece.wav')
        #puzzle_complete_sound = Sound('./sound_stimuli/puzzle_complete.wav')
        #cmap = sns.color_palette('crest_r',n_colors=201)

        fulltime = 540
        total_score = 0

        dlg = gui.Dlg(title = 'Experiment initialization')
        dlg.addField('subject')
        dlg.addField('session', choices=['1','2'])
        dlg.addField('run', choices=['1','2','3'])
        dlg.addField('outDirRoot',)

        user_input = dlg.show()

        subj = f'sub-RP{int(user_input[0]):03d}'
        sess = f'ses-{int(user_input[1])}'
        run = int(user_input[2])
        outDirRoot = user_input[3]

        if outDirRoot == '':
            outDirRoot = '../outDir'
        #    outDirRoot = '/Users/ah7700/Desktop/'

        run_outDir = f'{outDirRoot}/{subj}/{sess}/run-{run}'
        print(f'looking in {run_outDir} for real time outputs')
        if not os.path.exists(run_outDir):
            os.makedirs(run_outDir)
      End Routine:
        runTimer = core.Clock()
        globalClock.reset()
        thisExp.timestampOnFlip(win, 'time0')
        thisExp.nextEntry()
  Routine iti
    CodeComponent iti_code
      Code Type = Auto->JS
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      Begin Experiment:
        makeup_time = 0
      Begin Routine:
        routineTimer.add(-30 + iti_dur - makeup_time)
    PolygonComponent fixation_3
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine end_screen
    TextComponent end_screen_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'Great job,\n\nYou got {int(total_score)} total points this time!'
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    KeyboardComponent end_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
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      Begin Routine:
        #score_color = cmap[int((np.round(score,2)+1)*100)]
        routineTimer.add(-6 + 6 - feedback_time_adjust)

        if score <= 0:
        #    score_color = 'lightcoral'
            score_color = 'grey'
        else:
            score_color = 'mediumseagreen'

        max_size = 600
        min_size = 200
        size_range = max_size - min_size
        score_frac = (np.round(score,2)+1)/2
        score_size = (score_frac*size_range) + min_size
        size_step_count = 0
        size_steps = np.arange(min_size,score_size+2.5,2.5)
        if size_steps[-1] != score_size:
            size_steps[-1] = score_size
        #size_steps = np.concatenate((np.linspace(min_size,score_size),[score_size]))

        feedback_size = size_steps[size_step_count]
        feedback_size_tup = (feedback_size,feedback_size)
      Each Frame:
        if feedback_circle.status == STARTED and feedback_size < score_size:
            size_step_count += 1
            feedback_size = size_steps[size_step_count]
            feedback_size_tup = (feedback_size,feedback_size)
    PolygonComponent zero_circle
      fillColor = None
      lineColor [set every repeat] = $score_color
      lineWidth = 8
      opacity = .8
      shape = circle
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent outer_circle
      fillColor = None
      lineColor [set every repeat] = $score_color
      lineWidth = 8
      opacity = .8
      shape = circle
      size = (600, 600)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent feedback_circle
      fillColor [set every repeat] = $score_color
      lineWidth = 0
      shape = circle
      size [set every frame] = feedback_size_tup
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    PolygonComponent fixation
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine calculation
    PolygonComponent zero_circle_2
      fillColor = None
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 5
      shape = circle
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent feedback_circle_2
      fillColor [set every repeat] = 0.0039, 0.0039, 0.0039
      lineWidth = 0
      shape = circle
      size [set every frame] = (200,200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent inner_circle_2
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      lineWidth = 5
      shape = circle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixation_2
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent outer_circle_2
      fillColor = None
      lineColor [set every repeat] = 0.0039, 0.0039, 0.0039
      lineWidth = 8
      shape = circle
      size = (600, 600)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine induction
    PolygonComponent feedback_circle_3
      fillColor [set every repeat] = 0.0039, 0.0039, 0.0039
      lineWidth = 0
      shape = circle
      size [set every frame] = (200,200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    PolygonComponent fixation_4
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine calculation_fixation
    CodeComponent iti_code_2
      Code Type = Py
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      Begin Experiment:
        feedbackClock = core.Clock()
      Begin Routine:
        #determine what the last trial output was
        feedbackClock.reset()

        if not test_mode:
            score_loaded = False
            this_trial = f'{run_outDir}/trial-{trial_num}.json'

        else:
            trial = trial_num
            score_loaded = True
            score = np.random.choice([1,.5,0,-.5,-1],1)
      Each Frame:
        #capture new responses
        if not score_loaded:
            try:
                score = float(filetools.fromFile(this_trial)['score'])
                score_loaded = True
            except:
                pass

        if score_loaded:
            if score > 0:
                total_score += score*10
            currentS = feedbackClock.getTime()
            if currentS > 2:
                makeup_time = currentS - 2
                feedback_time_adjust = 2#default
            elif currentS <= 2:
                feedback_time_adjust = currentS
                makeup_time = 0#default
            continueRoutine = False
      End Routine:
        thisExp.addData('score', score)
    TextComponent text
      letterHeight = 30
      pos = (8, -32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
      text = scoring...
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    PolygonComponent fixation_8
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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  Routine post_induction
    PolygonComponent fixation_5
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent text_2
      letterHeight = 30
      pos = (8,-32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = scoring...
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  Routine initial_iti
    PolygonComponent fixation_6
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if test_mode:
            routineTimer.add(-59)
  Routine final_iti
    PolygonComponent fixation_7
      fillColor = white
      lineWidth = 0
      shape = circle
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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Flow
  Routine instructions
  Routine initial_iti
  LoopInitiator feedback_loop loopType="TrialHandler"
    conditionsFile = $f"data/{subj}/inputs/{subj}_{sess}_task-feedback_run-{run}_events.csv"
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine induction
    Routine post_induction
    Routine calculation_fixation
    Routine feedback
  LoopTerminator feedback_loop
  Routine final_iti
  Routine end_screen
